<CompuCell3D Revision="0" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="LUM"/>
      <CellType TypeId="2" TypeName="EPI"/>
      <CellType TypeId="3" TypeName="MYO"/>
      <CellType TypeId="4" TypeName="MEM"/>
      <CellType TypeId="5" TypeName="MAC"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="NeighborTracker">
   
        <!-- Module tracking neighboring cells of each cell -->
    </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="LUM">800.0</Energy>
      <Energy Type1="Medium" Type2="EPI">70.0</Energy>
      <Energy Type1="Medium" Type2="MYO">30.0</Energy>
      <Energy Type1="Medium" Type2="MEM">10.0</Energy>
      <Energy Type1="Medium" Type2="MAC">10.0</Energy>
      <Energy Type1="LUM" Type2="LUM">10.0</Energy>
      <Energy Type1="LUM" Type2="EPI">10.0</Energy>
      <Energy Type1="LUM" Type2="MYO">70.0</Energy>
      <Energy Type1="LUM" Type2="MEM">80.0</Energy>
      <Energy Type1="LUM" Type2="MAC">80.0</Energy>
      <Energy Type1="EPI" Type2="EPI">10.0</Energy>
      <Energy Type1="EPI" Type2="MYO">10.0</Energy>
      <Energy Type1="EPI" Type2="MEM">50.0</Energy>
      <Energy Type1="EPI" Type2="MAC">50.0</Energy>
      <Energy Type1="MYO" Type2="MYO">10.0</Energy>
      <Energy Type1="MYO" Type2="MEM">10.0</Energy>
      <Energy Type1="MYO" Type2="MEM">10.0</Energy>
      <Energy Type1="MEM" Type2="MEM">10.0</Energy>
      <Energy Type1="MEM" Type2="MAC">10.0</Energy>
      <Energy Type1="MAC" Type2="MAC">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="GlobalBoundaryPixelTracker">
    <NeighborOrder>1</NeighborOrder>
  </Plugin>
  
   
   
<Steppable Type="DiffusionSolverFE">
   
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="CHEM">
      <DiffusionData>
         <FieldName>CHME</FieldName>
         <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.0</GlobalDecayConstant>
         <!-- Additional options are: -->
         <InitialConcentrationExpression>1.0</InitialConcentrationExpression>
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- <DiffusionCoefficient CellType="LUM">0.1</DiffusionCoefficient> -->
         <DiffusionCoefficient CellType="EPI">0.00</DiffusionCoefficient>
         <!-- <DiffusionCoefficient CellType="MYO">0.1</DiffusionCoefficient> -->
         <!-- <DiffusionCoefficient CellType="MEM">0.1</DiffusionCoefficient> -->
         <DiffusionCoefficient CellType="MAC">0.001</DiffusionCoefficient>
         <!-- <DecayCoefficient CellType="LUM">0.0</DecayCoefficient> -->
         <DecayCoefficient CellType="EPI">0.01</DecayCoefficient>
         <!-- <DecayCoefficient CellType="MYO">0.0001</DecayCoefficient> -->
         <!-- <DecayCoefficient CellType="MEM">0.0001</DecayCoefficient> -->
         <DecayCoefficient CellType="MAC">0.01</DecayCoefficient>
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->
         <!-- <Secretion Type="LUM">0.1</Secretion> -->
         <!-- <Secretion Type="EPI">0.1</Secretion> -->
         <!-- <Secretion Type="MYO">0.1</Secretion> -->
         <!-- <Secretion Type="MEM">0.1</Secretion> -->
         <!-- <Secretion Type="MAC">0.1</Secretion> -->
         <!-- <SecretionOnContact SecreteOnContactWith="LUM,EPI,MYO,MEM,MAC" Type="MAC">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="MAC">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <!-- <ConstantValue PlanePosition="Min" Value="1.0"/> -->
            <!-- <ConstantValue PlanePosition="Max" Value="0.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

    <Plugin Name="PixelTracker">
   
    <!-- Module tracking pixels of each cell --> 
    </Plugin>
   
<Plugin Name="FocalPointPlasticity">
   
   <!-- Specification of focal point junctions -->
   <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
   <!-- To modify FPP links individually for each cell pair uncomment line below -->
   <Local/>
   <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
   <!-- See CC3D manual for details on FPP plugin  -->
   
   <Parameters Type1="MEM" Type2="MEM">
      <!-- <Lambda>10</Lambda> -->
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
   </Parameters>
   
   <NeighborOrder>1</NeighborOrder>
</Plugin>




   
   <Steppable Type="UniformInitializer">
      
      <Region>
         <BoxMin x="120" y="120" z="0"/>
         <BoxMax x="129" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>LUM</Types>
      </Region>
      <Region>
         <BoxMin x="120" y="130" z="0"/>
         <BoxMax x="129" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>EPI</Types>
      </Region>
      <Region>
         <BoxMin x="130" y="120" z="0"/>
         <BoxMax x="139" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MYO</Types>
      </Region>
      <Region>
         <BoxMin x="130" y="130" z="0"/>
         <BoxMax x="139" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MEM</Types>
      </Region>
      <!-- Top Right -->
      <Region>
         <BoxMin x="160" y="160" z="0"/>
         <BoxMax x="169" y="169" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Middle Right -->
      <Region>
         <BoxMin x="170" y="130" z="0"/>
         <BoxMax x="179" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Bottom Right -->
      <Region>
         <BoxMin x="160" y="100" z="0"/>
         <BoxMax x="169" y="109" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Top -->
      <Region>
         <BoxMin x="120" y="170" z="0"/>
         <BoxMax x="129" y="179" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Top Left -->
      <Region>
         <BoxMin x="90" y="150" z="0"/>
         <BoxMax x="99" y="159" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Middle Left -->
      <Region>
         <BoxMin x="80" y="120" z="0"/>
         <BoxMax x="89" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Bottom Left -->
      <Region>
         <BoxMin x="90" y="90" z="0"/>
         <BoxMax x="99" y="99" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
      <!-- Bottom -->
      <Region>
         <BoxMin x="130" y="80" z="0"/>
         <BoxMax x="139" y="89" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC</Types>
      </Region>
   </Steppable>
</CompuCell3D>